//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")

(ErodeMask "false" )

(NumberOfResolutions 6)

(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")
(AutomaticTransformInitializationMethod "CenterOfGravity" )


//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 2000) 

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Random")
(NumberOfSpatialSamples 10000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(MaximumStepLength 4.0)

(WriteResultImage "true")

//(WriteTransformParametersEachIteration "true")

// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "short")
(ResultImageFormat "tif")
(CompressResultImage "true")





















